<PlusConfiguration version="2.3">



  <DataCollection StartupDelaySec="1.0" >



    <DeviceSet 



      Name="PlusServer: US configuration"



      Description="US configurations with three vessels"



    />



  <!-- Optical marker tracker-->



    <Device



      Id="VideoDeviceAruco"



      Type="MmfVideo"



      FrameSize="640 480"



      VideoFormat="YUY2"



      CaptureDeviceId="1" >



      <DataSources>



        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR" />



      </DataSources>



      <OutputChannels>



        <OutputChannel Id="VideoStreamARUCO" VideoDataSourceId="Video" />



      </OutputChannels>



    </Device>



    <Device



      Id="TrackerDevice"



      Type="OpticalMarkerTracker"



      CameraCalibrationFile="camera_calibration.yml"



      ToolReferenceFrame="Tracker"



      TrackingMethod="OPTICAL_AND_DEPTH"



      MarkerDictionary="ARUCO_MIP_36h12">



      <DataSources>



        <DataSource Type="Tool" Id="Reference" MarkerId="2"  MarkerSizeMm="50" BufferSize="150" />



        <DataSource Type="Tool" Id="Probe" MarkerId="3" MarkerSizeMm="50" BufferSize="150"/>



        <DataSource Type="Tool" Id="Needle" MarkerId="4"  MarkerSizeMm="50" BufferSize="150" />



      </DataSources>



      <InputChannels>



        <InputChannel Id="VideoStreamARUCO"  />



      </InputChannels>



      <OutputChannels>



        <OutputChannel Id="TrackerStream" >



          <DataSource Id="Reference"/>



          <DataSource Id="Probe"/>



          <DataSource Id="Needle"/>



        </OutputChannel>



      </OutputChannels>



    </Device>



        <!-- For getting images from the US simulator -->



    <Device



      Id="VideoDevice"



      Type="UsSimulator"



      LocalTimeOffsetSec="0.0"



      AcquisitionRate="15" >



      <DataSources>



        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" />  



      </DataSources>      



      <InputChannels>



        <InputChannel Id="TrackerStream" />



      </InputChannels>



      <OutputChannels>



        <OutputChannel Id="USVideoStream" VideoDataSourceId="Video" />



      </OutputChannels>      



      <vtkPlusUsSimulatorAlgo



        ImageCoordinateFrame="Image"



        ReferenceCoordinateFrame="Ras"



        IncomingIntensityMwPerCm2="300"



        BrightnessConversionGamma="0.2"



        BrighntessConversionOffset="30"



        NumberOfScanlines="128"



        NumberOfSamplesPerScanline="1000"



        NoiseAmplitude="5.0"



        NoiseFrequency="2.5 3.5 1"



        NoisePhase="50 20 0"        



        >



        <SpatialModel



          Name="Air"



          DensityKgPerM3="1.2"



          SoundVelocityMPerSec="343"



          AttenuationCoefficientDbPerCmMhz="100.0"



          BackscatterDiffuseReflectionCoefficient="0.1"



          SurfaceReflectionIntensityDecayDbPerMm="50"



        />



        <SpatialModel



          Name="GelBlock"



          ObjectCoordinateFrame="Ras"



          ModelFile="CurvedGel.stl"



          ModelToObjectTransform="



           1 0 0 0



           0 1 0 0 



           0 0 1 10 



           0 0 0 1 "



          DensityKgPerM3="910"



          SoundVelocityMPerSec="1540"



          AttenuationCoefficientDbPerCmMhz="3.0"



          BackscatterDiffuseReflectionCoefficient="0.1"



          SurfaceSpecularReflectionCoefficient="0.1"



          SurfaceDiffuseReflectionCoefficient="0.0"



          TransducerSpatialModelMaxOverlapMm="50"



        />       



        <SpatialModel



          Name="Needle"



          ObjectCoordinateFrame="NeedleTip"



          ModelFile="SimulatedUltrasound_NeedleModel_NeedleTip.stl"



          ModelToObjectTransform="



            1 0 0 0



            0 1 0 0



            0 0 1 0



            0 0 0 1"



          DensityKgPerM3="2000"



          SoundVelocityMPerSec="2000"      



          AttenuationCoefficientDbPerCmMhz="8.0"



          BackscatterDiffuseReflectionCoefficient="0.2"



          SurfaceSpecularReflectionCoefficient="0.1"



          SurfaceDiffuseReflectionCoefficient="0.0"



          SurfaceReflectionIntensityDecayDbPerMm="5"



        /> 



         <SpatialModel



          Name="Vessel"



          ObjectCoordinateFrame="Ras"



          ModelFile="Vessel.STL"



          ModelToObjectTransform="



           1 0 0 51 



           0 1 0 3 



           0 0 1 20 



           0 0 0 1 "



          DensityKgPerM3="1800"



          SoundVelocityMPerSec="2000"



          AttenuationCoefficientDbPerCmMhz="0.0001"



          BackscatterDiffuseReflectionCoefficient="0.03"          



          SurfaceSpecularReflectionCoefficient="0.1"



          SurfaceDiffuseReflectionCoefficient="0.0"



        />



        <SpatialModel



          Name="Vessel"



          ObjectCoordinateFrame="Ras"



          ModelFile="Vessel.STL"



          ModelToObjectTransform="



           1 0 0 70 



           0 1 0 3 



           0 0 1 30 



           0 0 0 1 "



          DensityKgPerM3="1800"



          SoundVelocityMPerSec="2000"



          AttenuationCoefficientDbPerCmMhz="0.0001"



          BackscatterDiffuseReflectionCoefficient="0.03"          



          SurfaceSpecularReflectionCoefficient="0.1"



          SurfaceDiffuseReflectionCoefficient="0.0"



        />



        <SpatialModel



          Name="Vessel"



          ObjectCoordinateFrame="Ras"



          ModelFile="Vessel.STL"



          ModelToObjectTransform="



           1 0 0 32



           0 1 0 3 



           0 0 1 30 



           0 0 0 1 "



          DensityKgPerM3="1800"



          SoundVelocityMPerSec="2000"



          AttenuationCoefficientDbPerCmMhz="0.0001"



          BackscatterDiffuseReflectionCoefficient="0.03"          



          SurfaceSpecularReflectionCoefficient="0.1"



          SurfaceDiffuseReflectionCoefficient="0.0"



        />



        <RfProcessing>



          <ScanConversion



            TransducerName="Ultrasonix_L9-4/38"



            TransducerGeometry="LINEAR"



            ImagingDepthMm="60.0"



            TransducerWidthMm="40.0"



            OutputImageSizePixel="820 616"



            TransducerCenterPixel="410 0"



            OutputImageSpacingMmPerPixel="0.084 0.087"/>



        </RfProcessing>



      </vtkPlusUsSimulatorAlgo> 



    </Device>



    <Device 



      Id="TrackedVideoDevice" 



      Type="VirtualMixer" >



      <InputChannels>



        <InputChannel Id="TrackerStream" />



        <InputChannel Id="USVideoStream" />



      </InputChannels>



      <OutputChannels>



        <OutputChannel Id="TrackedVideoStream"/>



      </OutputChannels>



    </Device>



	</DataCollection>



  <CoordinateDefinitions>



    <Transform From="Image" To="TransducerOriginPixel"



      Matrix="1 0 0 -410



              0 1 0 5



              0 0 1 0



              0 0 0 1" /> 



    <Transform From="ProbeModel" To="Probe"



          Matrix="



        -0.0442018 -0.999022 -0.00102228 142.834 



        0.998206 -0.0441243 -0.0404663 -52.602 



        0.0403816 -0.00280913 0.99918 -15.9709 



        0 0 0 1 " /> 



    <Transform From="NeedleTip" To="Needle"



      Matrix="



        1 0 0 0



        0 1 0 0 



        0 0 1 0



        0	0	0	1"



       Error="0.982859" Date="061818_095934" />



       <Transform From="Image" To="Probe"



      Matrix="



          0.00461697 0.100184 -0.00603443 130.697 



         -0.100231 0.0042896 -0.00547096 49.052 



         -0.00519766 0.00627138 0.100141 -6.022 



          0 0 0 1"  />



 <!--



 Matrix=



         "0.00461697 0.100184 -0.00603443 135.697 



        -0.100231 0.0042896 -0.00547096 46.0517 



        -0.00519766 0.00627138 0.100141 -1.02227 



         0 0 0 1 " --> 



      <Transform From="Reference" To="Ras"



      Matrix="



         -0.0241808 0.999444 0.0229708 20.508 



         -0.704572 -0.0333385 0.708849 169.231 



          0.70922 0.000955916 0.704987 48.0042 



          0 0 0 1   " />



  </CoordinateDefinitions> 



 <PlusOpenIGTLinkServer



    MaxNumberOfIgtlMessagesToSend="10"



    MaxTimeSpentWithProcessingMs="50"



    ListeningPort="18944"



    SendValidTransformsOnly="true"



    OutputChannelId="TrackedVideoStream" >



    <DefaultClientInfo>



      <MessageTypes>



        <Message Type="IMAGE" />



        <Message Type="TRANSFORM" />



      </MessageTypes>



      <TransformNames>



        <Transform Name="NeedleTipToRas" />



        <Transform Name="ProbeModelToRas" />



        <Transform Name="ReferenceToRas" />

        <Transform Name="ReferenceToTracker" />

        <Transform Name="NeedleTipToNeedle" />

        <Transform Name="NeedleToReference" />



      </TransformNames>



       <ImageNames>



        <Image Name="Image" EmbeddedTransformToFrame="Ras" />



    </ImageNames>



    </DefaultClientInfo>



  </PlusOpenIGTLinkServer>



 <PlusOpenIGTLinkServer 



    MaxNumberOfIgtlMessagesToSend="1" 



    MaxTimeSpentWithProcessingMs="50" 



    ListeningPort="18945" 



    SendValidTransformsOnly="true" 



    OutputChannelId="VideoStreamAruco" > 



    <DefaultClientInfo> 



      <MessageTypes> 



        <Message Type="IMAGE" />



      </MessageTypes>



      <ImageNames>



        <Image Name="Image" EmbeddedTransformToFrame="Image" />



      </ImageNames>



    </DefaultClientInfo>



  </PlusOpenIGTLinkServer>



</PlusConfiguration>